PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'order_group_number': ''}
  Full-screen window = False
  Monitor = $experiment_mon
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 750]
  color = $BG_COL
  expName = disembedding_task
  keyboardBackend = PsychToolbox
  logging level = debug
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Routines
  Routine intro
    TextComponent text_intro
      color = $TXT_COL_NEUTRAL
      letterHeight = $TXT_SIZE_M
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $INTRO_TXT
      units = deg
      wrapWidth = $TXT_WRAP_WIDTH
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    MouseComponent mouse_intro
      clickable = rectangle_continue
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = $read_audio_sound_dict['read_intro']['dur']
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    CodeComponent code_intro
      Code Type = Auto->JS
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      Begin Routine:
        # fetch audio of read instructions and its duration
        read_sound = read_audio_sound_dict['read_intro']['sound']
        read_dur = read_audio_sound_dict['read_intro']['dur']
        # start playing instructions
        read_sound.play()
      Each Frame:
        # if read instructions audio has finished playing
        if tThisFlip >= read_dur:
            rectangle_continue.draw()
            text_continue.draw()
    SoundComponent sound_read_audio_intro
      saveStartStop = False
      sound = $os.path.join(READ_AUDIO_DIR_PATH, READ_AUDIO_INTRO_FNAME)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $READ_AUDIO_INTRO_DUR
      volume = AUDIO_VOLUME
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  Routine train_2
    CodeComponent code_train2
      Code Type = Py
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      Begin Routine:
        # reset counter of number of correct responses
        correct_counter = 0

        # reset click counter
        click_counter = 0

        # reset mouse save data attributes
        mouse.x = []
        mouse.y = []
        mouse.time = []

        # reset variable indicating if routine is ready for showing
        # continue button
        ready_continue = False

        # reset continue button
        rectangle_continue.opacity = 0
        # empty continue text component's text, which is filled
        # in once participant is allowed to continue
        # (can't simply change opacity of thext text because of a PsychoPy bug)
        text_continue.text = ""

        # reset list of cross drawing positions
        cross_position_list.clear()

        # clear the list of ellipses stimuli, to make it ready for this trial
        trial_ellipses.clear()
        # specify the resize factor for this routine
        resize_factor = TRAIN2_RESIZE_FACTOR
        # specify the context x/y coordinate offsets
        context_x = TRAIN2_CONTEXT_X
        context_y = TRAIN2_CONTEXT_Y
        # specify the target/context images' filenames (for filtering dataframe rows
        # below, and updating image stimuli)
        target_filename = "train2_target.jpg"
        context_filename = 'train2_context.jpg'

        # find which row indices in the ellipses_df that correspond to this trial's
        # target ellipses data
        df_indices = list(ellipses_df[ellipses_df['filename'] == context_filename].index)
        for index in df_indices:
            center_x = px_to_deg(ellipses_df.loc[index, 'center_x']) * resize_factor + context_x
            center_y = px_to_deg(ellipses_df.loc[index, 'center_y']) * resize_factor + context_y
            xaxis_r = px_to_deg(ellipses_df.loc[index, 'xaxis_r']) * resize_factor
            yaxis_r = px_to_deg(ellipses_df.loc[index, 'yaxis_r']) * resize_factor
            orientation = ellipses_df.loc[index, 'orientation']
            new_ellipsis = make_pp_ellipsis(
                center_x,
                center_y,
                xaxis_r,
                yaxis_r,
                orientation
            )
            new_ellipsis.correct = ellipses_df.loc[index, 'correct']
            if not new_ellipsis.correct:
                new_ellipsis.lineColor = [1,0,0]
            trial_ellipses.append(new_ellipsis)

        # make a shallow copy of ellipses list, from which ellipses
        # will be plucked as soon as they are clicked
        nonclicked_ellipses = [ell for ell in trial_ellipses if ell.correct]

        # update image stimuli
        image_train_target.image = os.path.join("stimuli", "train", target_filename)
        image_train_target.pos=(TRAIN2_TARGET_X, TRAIN2_TARGET_Y)
        image_train_target.size=(train2_target_width, train2_target_height)
        image_train_context.image = os.path.join("stimuli", "train", context_filename)
        image_train_context.pos = (context_x, context_y)
        image_train_context.size=(train2_context_width, train2_context_height)

        # update border stimuli
        rect_train_target.size = (train2_target_width, train2_target_height)
        rect_train_context.size = (train2_context_width, train2_context_height)
        rect_train_target.pos=(TRAIN2_TARGET_X, TRAIN2_TARGET_Y)
        rect_train_context.pos=(context_x, context_y)


        # fetch audio of read instructions and its duration
        read_sound_inst = read_audio_sound_dict['read_train2_inst']['sound']
        read_dur_inst = read_audio_sound_dict['read_train2_inst']['dur']
        # fetch audio of incorrect/correct messages and durations
        read_sound_corr = read_audio_sound_dict['read_train2_corr']['sound']
        read_dur_corr = read_audio_sound_dict['read_train2_corr']['dur']
        read_sound_incorr = read_audio_sound_dict['read_train2_incorr']['sound']
        read_dur_incorr = read_audio_sound_dict['read_train2_incorr']['dur']
        # reset indicator of whether borders have switched to 'active' (responses
        # welcome) color
        active_borders = False
        # reset indicator of whether feedback has started,
        # and variable indicating start time of feedback
        feedback_started = False
        feedback_start_time = 9999
        # start playing instructions
        read_sound_inst.play()
        # reset border colors to 'neutral'
        rect_train_target.lineColor = TRAIN_BORDER_COL
        rect_train_context.lineColor = TRAIN_BORDER_COL
      Each Frame:
        image_train_target.draw()
        image_train_context.draw()
        rect_train_target.draw()
        rect_train_context.draw()
        rectangle_continue.draw()
        text_continue.draw()

        # instructions audio has finished?
        if tThisFlip >= read_dur_inst:
            if not active_borders:
                rect_train_target.lineColor = TRAIN_BORDER_ACTIVE_COL
                rect_train_context.lineColor = TRAIN_BORDER_ACTIVE_COL
                active_borders = True
            buttons = mouse.getPressed()
            if buttons != prevButtonState:  # button state changed?
                prevButtonState = buttons
                if sum(buttons) > 0:  # state changed to a new click
                    x, y = mouse.getPos()
                    mouse.x.append(x)
                    mouse.y.append(y)
                    # if continue button is already shown and trial is otherwise
                    # over
                    if ready_continue:
                        if rectangle_continue.contains(mouse):
                            continueRoutine = False
                    # if click within context image area
                    elif image_train_context.contains(mouse):
                        click_counter += 1
                        # list of indices of ellipses to be removed
                        rm_ell_inds = []
                        cross_position_list.append((x, y))
                        # go through all ellipses and check for each one if mouse
                        # was clicked within it
                        for ell_ind in range(len(nonclicked_ellipses)):
                            if nonclicked_ellipses[ell_ind].contains(mouse):
                                correct_counter += 1
                                rm_ell_inds.append(ell_ind)
                        # remove clicked ellipses
                        for rm_ell_ind in rm_ell_inds:
                            nonclicked_ellipses.pop(rm_ell_ind)
                            # decrement all 'remove indices' that are higher
                            # than the index whose element was just removed
                            rm_ell_inds = [x-1 if x>rm_ell_ind else x for x in rm_ell_inds]
                    buttons = mouse.getPressed()
                    mouse.time.append(mouse.mouseClock.getTime())

        # checking here against `len(trial_ellipses)-1` since
        # one of the ellipses in this practice trial is incorrect
        if correct_counter >= len(trial_ellipses)-1:
            for ellipsis in trial_ellipses:
                ellipsis.draw()
            if not feedback_started:
                if correct_counter == click_counter:
                    # set feedback sound and duration
                    feedback_sound = read_sound_corr
                    feedback_dur = read_dur_corr
                    # set top text to feedback text
                    text_train2_inst.text = TRAIN2_TXT_CORR
                else:
                    feedback_sound = read_sound_incorr
                    feedback_dur = read_dur_incorr
                    text_train2_inst.text = TRAIN2_TXT_INCORR
                feedback_sound.play()
                feedback_start_time = t
                feedback_started = True
            feedback_finished = (t - feedback_start_time) > feedback_dur
            if not ready_continue and feedback_finished:
                ready_continue = True
                # show continue button
                rectangle_continue.opacity = 1
                text_continue.text = CONTINUE_TXT

        # draw crosses where participant has clicked
        for position in cross_position_list:
            cross_stimulus.pos = position
            cross_stimulus.draw()
      End Routine:
        # save practice trial data
        thisExp.addData('mouse.x', mouse.x)
        thisExp.addData('mouse.y', mouse.y)
        thisExp.addData('mouse.time', mouse.time)
        # did the participant succeed at the trial?
        if correct_counter == click_counter:
            thisExp.addData('practice_heart_success', 'success')
        else:
            thisExp.addData('practice_heart_success', 'failure')
    TextComponent text_train2_inst
      color = $TXT_COL_NEUTRAL
      letterHeight = $TXT_SIZE_M
      pos = (0, TRAIN2_TXT_INST_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $TRAIN2_TXT_INST
      units = deg
      wrapWidth = $TXT_WRAP_WIDTH
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  Routine train_1
    CodeComponent code_train1
      Code Type = Py
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      Begin Experiment:
        # these stimuli must be manually created to control when they are drawn,
        # to avoid them overlaying (through autodraw) 'correct' circles that are to
        # be drawn on top
        image_train_target = visual.ImageStim(
            win=win,
            name='image_train_target',
            image=os.path.join("stimuli", "train", "train1_target_new.jpg"), mask=None,
            ori=0, pos=(0, TRAIN1_TARGET_Y), size=(train1_target_width, train1_target_height),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=512, interpolate=True, depth=-2.0)

        image_train_context = visual.ImageStim(
            win=win,
            name='image_train_context',
            image=os.path.join("stimuli", "train", "train1_context_new.jpg"), mask=None,
            ori=0, pos=(0, TRAIN1_CONTEXT_Y), size=(train1_context_width, train1_context_height),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=512, interpolate=True, depth=-3.0)

        # train target/context border stimuli
        rect_train_target = visual.Rect(
            win=win, name='rect_train_target',units='deg',
            size=(train1_target_width, train1_target_height),
            ori=0, pos=(0, TRAIN1_TARGET_Y),
            lineWidth=3, lineColor=TRAIN_BORDER_COL, lineColorSpace='rgb',
            fillColor=None, fillColorSpace='rgb',
            opacity=1, depth=-2.0, interpolate=True)

        rect_train_context = visual.Rect(
            win=win, name='rect_train_context',units='deg',
            size=(train1_context_width, train1_context_height),
            ori=0, pos=(0, TRAIN1_CONTEXT_Y),
            lineWidth=3, lineColor=TRAIN_BORDER_COL, lineColorSpace='rgb',
            fillColor=None, fillColorSpace='rgb',
            opacity=1, depth=-2.0, interpolate=True)
      Begin Routine:
        # reset mouse save data attributes
        mouse.x = []
        mouse.y = []
        mouse.time = []

        # reset counter of number of correct responses
        correct_counter = 0

        # reset variable indicating if participant has clicked
        has_clicked = False

        # reset variable indicating if routine is ready for showing
        # continue button
        ready_continue = False

        # reset continue button
        rectangle_continue.opacity = 0
        # empty continue text component's text, which is filled
        # in once participant is allowed to continue
        # (can't simply change opacity of thext text because of a PsychoPy bug)
        text_continue.text = ""

        # reset list of cross drawing positions
        cross_position_list.clear()

        # clear the list of ellipses stimuli, to make it ready for this trial
        trial_ellipses.clear()
        # specify the resize factor for this routine
        resize_factor = TRAIN1_RESIZE_FACTOR
        # specify the context y coordinate offset
        context_y = TRAIN1_CONTEXT_Y
        # specify the context image's filename (for filtering dataframe rows
        # below)
        context_filename = 'train1_context.jpg'

        # find which row indices in the ellipses_df that correspond to this trial's
        # target ellipses data
        df_indices = list(ellipses_df[ellipses_df['filename'] == context_filename].index)
        for index in df_indices:
            center_x = px_to_deg(ellipses_df.loc[index, 'center_x']) * resize_factor
            center_y = px_to_deg(ellipses_df.loc[index, 'center_y']) * resize_factor + context_y
            xaxis_r = px_to_deg(ellipses_df.loc[index, 'xaxis_r']) * resize_factor
            yaxis_r = px_to_deg(ellipses_df.loc[index, 'yaxis_r']) * resize_factor
            orientation = ellipses_df.loc[index, 'orientation']
            new_ellipsis = make_pp_ellipsis(
                center_x,
                center_y,
                xaxis_r,
                yaxis_r,
                orientation
            )
            trial_ellipses.append(new_ellipsis)

        # fetch audio of read instructions and its duration
        read_sound_inst = read_audio_sound_dict['read_train1_inst']['sound']
        read_dur_inst = read_audio_sound_dict['read_train1_inst']['dur']
        # fetch audio of incorrect/correct messages and durations
        read_sound_corr = read_audio_sound_dict['read_train1_corr']['sound']
        read_dur_corr = read_audio_sound_dict['read_train1_corr']['dur']
        read_sound_incorr = read_audio_sound_dict['read_train1_incorr']['sound']
        read_dur_incorr = read_audio_sound_dict['read_train1_incorr']['dur']
        # reset indicator of whether borders have switched to 'active' (responses
        # welcome) color
        active_borders = False
        # reset indicator of whether feedback has started,
        # and variable indicating start time of feedback
        feedback_started = False
        feedback_start_time = 9999
        # start playing instructions
        read_sound_inst.play()
      Each Frame:
        image_train_target.draw()
        image_train_context.draw()
        rect_train_target.draw()
        rect_train_context.draw()
        rectangle_continue.draw()
        text_continue.draw()

        # instructions audio has finished?
        if tThisFlip >= read_dur_inst:
            if not active_borders:
                rect_train_target.lineColor = TRAIN_BORDER_ACTIVE_COL
                rect_train_context.lineColor = TRAIN_BORDER_ACTIVE_COL
                active_borders = True
            buttons = mouse.getPressed()
            if buttons != prevButtonState:  # button state changed?
                prevButtonState = buttons
                if sum(buttons) > 0:  # state changed to a new click
                    x, y = mouse.getPos()
                    mouse.x.append(x)
                    mouse.y.append(y)
                    # if continue button is already shown and trial is otherwise
                    # over
                    if ready_continue:
                        if rectangle_continue.contains(mouse):
                            continueRoutine = False
                    elif image_train_context.contains(mouse):
                        has_clicked = True
                        cross_position_list.append((x, y))
                        # go through all ellipses and check for each one if mouse
                        # was clicked within it
                        for ell_ind in range(len(trial_ellipses)):
                            if trial_ellipses[ell_ind].contains(mouse):
                                correct_counter += 1
                    buttons = mouse.getPressed()
                    mouse.time.append(mouse.mouseClock.getTime())

        if has_clicked:
            for ellipsis in trial_ellipses:
                ellipsis.draw()
            if not feedback_started:
                if correct_counter:
                    # set feedback sound and duration
                    feedback_sound = read_sound_corr
                    feedback_dur = read_dur_corr
                    # set top text to feedback text
                    text_train1_inst.text = TRAIN1_TXT_CORR
                else:
                    feedback_sound = read_sound_incorr
                    feedback_dur = read_dur_incorr
                    text_train1_inst.text = TRAIN1_TXT_INCORR
                feedback_sound.play()
                feedback_start_time = t
                feedback_started = True
            feedback_finished = (t - feedback_start_time) > feedback_dur
            if not ready_continue and feedback_finished:
                ready_continue = True
                # show continue button
                rectangle_continue.opacity = 1
                text_continue.text = CONTINUE_TXT

        # draw crosses where participant has clicked
        for position in cross_position_list:
            cross_stimulus.pos = position
            cross_stimulus.draw()
      End Routine:
        # save practice trial data
        thisExp.addData('mouse.x', mouse.x)
        thisExp.addData('mouse.y', mouse.y)
        thisExp.addData('mouse.time', mouse.time)
        if correct_counter == 1:
            thisExp.addData('practice_cube_success', 'success')
        else:
            thisExp.addData('practice_cube_success', 'failure')
        thisExp.nextEntry()
    TextComponent text_train1_inst
      color = $TXT_COL_NEUTRAL
      letterHeight = $TXT_SIZE_M
      pos = (0, TRAIN1_TXT_INST_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $TRAIN1_TXT_INST
      units = deg
      wrapWidth = $TXT_WRAP_WIDTH
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  Routine setup
    CodeComponent code_translation
      Code Type = Auto->JS
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      Before Experiment:
        ### BEGIN TRANSLATION ###
        # intro screen text
        INTRO_TXT = (
            "I de här uppgifterna ska du hitta figurer i olika bilder. "
            "På vissa bilder ska du hitta figurer med samma form flera gånger och "
            "på vissa bilder ska du hitta flera olika figurer som presenteras en i taget. \n\n"
            "Figuren som du ska leta efter visas ovanför bilden."
            " Den visas upp till 90 sekunder när du ska hitta likadana figurer "
            "och upp till 30 sekunder för varje figur när du ska hitta olika. \n\n"
            "Figuren som du ska leta efter ska ha exakt samma form men kan presenteras"
            " i olika storlekar och vinklar.\n\n"
            "Varje gång du hittar en figur klickar du på den."
        )

        # continue button text
        CONTINUE_TXT = "Fortsätt"

        # first training 'trial' instructions text
        TRAIN1_TXT_INST = (
            "Här ser du ett exempel på en av uppgifterna. \n"
            "Titta på figuren ovanför bilden och försök hitta den i bilden. \n"
            "Kom ihåg att figuren ska ha exakt samma form som den som presenteras ovanför "
            "men kan ha en annan storlek och vinkel. \n"
            "Hela figuren kommer att synas men det kan finnas andra figurer inom den."
        )

        # first training 'trial' feedback for correct response
        TRAIN1_TXT_CORR = (
            "Det var rätt!"
        )

        # first training 'trial' feedback for incorrect response
        TRAIN1_TXT_INCORR = (
            "Du hittade inte rätt figur: figuren du ska hitta ska ha "
            "exakt samma form som figuren ovanpå. Se "
            "markeringen för rätt svar."
        )

        # second training 'trial' instructions text
        TRAIN2_TXT_INST = (
            "Här ser du ett annat exempel på uppgift. "
            "Den här gången ska du hitta flera likadana figurer. "
            "Titta på figuren bredvid bilden och försök sedan hitta fler i bilden."
            "Kom ihåg att figurerna ska ha exakt samma form som den som presenteras "
            "bredvid men kan ha andra storlekar och vinklar.\n\n"
            "Varje gång du hittar en figur klickar du på den."
        )

        # second training 'trial' feedback for correct response
        TRAIN2_TXT_CORR = (
            "Bra! Du hittade alla figurer och klickade inte på fel figur.\n\n"
             "Lägg märke till att det rödmarkerade föremålet "
            "liknar figuren, men har inte exakt samma form."
        )

        # second training 'trial' feedback for incorrect response
        TRAIN2_TXT_INCORR = (
            "Du hittade alla figurer men klickade också på fel figur. "
            "Figuren du ska hitta ska ha exakt samma form "
            "som figuren bredvid.\n\n"
            "Lägg märke till att det rödmarkerade föremålet "
            "liknar figuren, men har inte exakt samma form."
        )

        # (after-training and immediately before first 'real' trial)
        # start screen instructions text
        START_TXT_INST = (
            "Nu börjar uppgiften. \n\n"
            "Försök att svara så snabbt och att klicka så "
            "exakt på figurerna som möjligt. \n\n"
            "Ett blått kryss visas på platsen där du klickat, oavsett om du klickar "
            "rätt eller fel. Du kan inte ångra om du klickar fel. "
            "Om du klickar fel, fortsätt bara med uppgiften."
        )

        # start test button text
        START_TXT_BTN = (
            "Starta"
        )

        # end screen message
        END_TXT = (
            "Bra jobbat! Nu kommer nästa experiment. När du är redo matar in ditt deltagar-ID för nästa test. Vänligen stanna i samma position. Ifall du behöver lämna din position behöver kalibreringen göras om. I så fall vänligen kontakta experimentledaren, tack!"
        )

        # trial instruction shown before 'repeated' and 'heap' trials
        REP_TXT = (
            "Hitta likadana."
        )

        # trial instruction shown before 'once' trials
        ONCE_TXT = (
            "Hitta olika, en i taget."
        )

        # trial instruction shown just before sequence of
        #'popout' trials starts
        POPOUT_TXT = (
            "Nu ska du klicka på figurer som visas helt fristående "
            "från de andra figurerna i bilden.\n"
            "Kom ihåg att figuren som du letar efter ska "
            "se exakt likadan ut som den som "
            "presenteras ovanför bilden men kan ha "
            "en annan storlek eller vinkel. "
            "Figuren visas ovanför bilden i 30 sekunder."
        )

        ## READ MESSAGES AUDIO SECTION ##
        # **relative** path to directory holding audio files with
        # read instructions/messages to participant
        READ_AUDIO_DIR_PATH = (
            "stimuli/audio_read_instructions/swedish"
        )

        # read messages audio file names
        # and durations (in seconds)
        # intro screen
        READ_AUDIO_INTRO_FNAME = 'read_intro.wav'
        READ_AUDIO_INTRO_DUR = 42.67827664399093
        # training 1 instructions
        READ_AUDIO_TRAIN1_INST_FNAME = 'read_train1_inst.wav'
        READ_AUDIO_TRAIN1_INST_DUR = 22.523356009070294
        # training 1 correct
        READ_AUDIO_TRAIN1_CORR_FNAME = 'read_train1_correct.wav'
        READ_AUDIO_TRAIN1_CORR_DUR = 1.5
        # training 1 incorrect
        READ_AUDIO_TRAIN1_INCORR_FNAME = 'read_train1_incorrect.wav'
        READ_AUDIO_TRAIN1_INCORR_DUR = 7.9412244897959186
        # training 2 instructions
        READ_AUDIO_TRAIN2_INST_FNAME = 'read_train2_inst.wav'
        READ_AUDIO_TRAIN2_INST_DUR = 25.26331065759637
        # training 2 correct
        READ_AUDIO_TRAIN2_CORR_FNAME = 'read_train2_correct.wav'
        READ_AUDIO_TRAIN2_CORR_DUR = 5.6656689342403626
        # training 2 incorrect
        READ_AUDIO_TRAIN2_INCORR_FNAME = 'read_train2_incorrect.wav'
        READ_AUDIO_TRAIN2_INCORR_DUR = 9.357641723356009
        # (after-training and immediately before first 'real' trial)
        # start screen
        READ_AUDIO_START_FNAME = 'read_start.wav'
        READ_AUDIO_START_DUR = 20.06204081632653

        # before sequence of
        #'popout' trials starts
        READ_AUDIO_INTRO_FNAME = 'read_train_pre_popout.wav'
        READ_AUDIO_INTRO_DUR = 20.135

        ## END READ MESSAGES AUDIO SECTION ##

        ### END TRANSLATION ###
    CodeComponent code_monitor_setup
      Code Type = Py
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      Before Experiment:
        # import psychopy module for generating
        # monitor instances.
        from psychopy import monitors

        # UPDATE HERE create monitor instance for your
        # laboratory's monitor.
        experiment_mon = monitors.Monitor(
            name="experiment_monitor",
            width=30, # UPDATEME monitor width in centimers
            distance=60, #UPDATEME distance from monitor in centimeters
            notes="Our lab's experiment monitor.")

        # UPDATE HERE let PsychoPy know the pixel width/height of
        # your laboratory's monitor.
        experiment_mon.setSizePix([1280, 1024]) #UPDATEME

        # info for pixel to degree conversion
        px_per_cm = experiment_mon.getSizePix()[0]/experiment_mon.getWidth()
        cm_per_deg = tan(pi / 180) * experiment_mon.getDistance()
        px_per_deg = px_per_cm * cm_per_deg
    CodeComponent code_common_functions_components
      Code Type = Py
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      Before Experiment:
        import pandas as pd

        def px_to_deg(px_val):
            """
            Convert from pixels to degrees (based on the 'experiment_mon'
            specifications)
            """
            return px_val / px_per_deg

        def make_pp_ellipsis(center_x, center_y, xaxis_r, yaxis_r, ori):
            """
            Form an ellipsis (polygon) stimulus object based on passed
            center coordinates, x/y-axis radii, and rotation angle
            (in degrees, where positive values indicate that the
            axes have been rotated **clockwise**).
            """
            pp_ellipsis = visual.Polygon(
                win=win, name='pp_ellipsis', edges=120,units='deg',
                size=(xaxis_r*2, yaxis_r*2),
                ori=ori, pos=(center_x, center_y),
                lineWidth=2, lineColor=[0,0,1], lineColorSpace='rgb',
                fillColor=None, fillColorSpace='rgb',
                opacity=1, depth=-10.0, interpolate=True)
            return pp_ellipsis

        # dictionary of read instructions/messages participant sound file paths and
        # durations
        read_audio_info_dicts = {
            'read_intro': {
                'fpath': os.path.join(READ_AUDIO_DIR_PATH, READ_AUDIO_INTRO_FNAME),
                'dur': READ_AUDIO_INTRO_DUR,
            },
            'read_train1_inst': {
                'fpath': os.path.join(READ_AUDIO_DIR_PATH, READ_AUDIO_TRAIN1_INST_FNAME),
                'dur': READ_AUDIO_TRAIN1_INST_DUR,
            },
            'read_train1_corr': {
                'fpath': os.path.join(READ_AUDIO_DIR_PATH, READ_AUDIO_TRAIN1_CORR_FNAME),
                'dur': READ_AUDIO_TRAIN1_CORR_DUR,
            },
            'read_train1_incorr': {
                'fpath': os.path.join(READ_AUDIO_DIR_PATH, READ_AUDIO_TRAIN1_INCORR_FNAME),
                'dur': READ_AUDIO_TRAIN1_INCORR_DUR,
            },
            'read_train2_inst': {
                'fpath': os.path.join(READ_AUDIO_DIR_PATH, READ_AUDIO_TRAIN2_INST_FNAME),
                'dur': READ_AUDIO_TRAIN2_INST_DUR,
            },
            'read_train2_corr': {
                'fpath': os.path.join(READ_AUDIO_DIR_PATH, READ_AUDIO_TRAIN2_CORR_FNAME),
                'dur': READ_AUDIO_TRAIN2_CORR_DUR,
            },
            'read_train2_incorr': {
                'fpath': os.path.join(READ_AUDIO_DIR_PATH, READ_AUDIO_TRAIN2_INCORR_FNAME),
                'dur': READ_AUDIO_TRAIN2_INCORR_DUR,
            },
            'read_start': {
                'fpath': os.path.join(READ_AUDIO_DIR_PATH, READ_AUDIO_START_FNAME),
                'dur': READ_AUDIO_START_DUR,
            }
        }
      Begin Experiment:
        # read in target ellipses data
        ellipses_data_path = os.path.join('stimuli', 'stimuli_roi_coordinates.csv')
        ellipses_df = pd.read_csv(ellipses_data_path)

        # list that will be updated for each trial with that
        # trial's ellipses stimuli objects
        trial_ellipses = []

        # mouse for registering participant clicks, with
        # related attributes and variables
        mouse = event.Mouse(win=win)
        x, y = [None, None]
        mouse.mouseClock = core.Clock()
        prevButtonState = []
        mouse.x = []
        mouse.y = []
        mouse.leftButton = []
        mouse.midButton = []
        mouse.rightButton = []
        mouse.time = []

        # continue button/text
        rectangle_continue = visual.Rect(
            win=win, name='rectangle_intro_continue',units='deg',
            width=(BTN_WIDTH*1.5, BTN_HEIGHT)[0], height=(BTN_WIDTH*1.5, BTN_HEIGHT)[1],
            ori=0, pos=(0, BTN_Y),
            lineWidth=2, lineColor=BTN_BORDER_COL, lineColorSpace='rgb',
            fillColor=BTN_FILL_COL, fillColorSpace='rgb',
            opacity=1, depth=-4.0, interpolate=True)
        text_continue = visual.TextStim(win=win, name='text_intro_continue',
            text=CONTINUE_TXT,
            font='Arial',
            units='deg', pos=(0, BTN_Y), height=BTN_TXT_HEIGHT, wrapWidth=None, ori=0,
            color=BTN_TXT_COL, colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-6.0);

        # cross for marking where participant has clicked
        cross_stimulus = visual.ShapeStim(
            win,
            pos=(0, 0),
            depth=-2,
            vertices='cross',
            size=(0.2, 0.2),
            lineColor=[-0.8, -0.8, 1],
            fillColor=[-0.8, -0.8, 1],
            units='deg')
        # list for keeping track of where cross should be
        # drawn (ie where participant has clicked during
        # current trial)
        cross_position_list = []

        # put together dictionary of sound stimuli for read instructions/messages
        read_audio_sound_dict = {}

        for info_dict_key in read_audio_info_dicts:
            info_dict = read_audio_info_dicts[info_dict_key]
            fpath = info_dict['fpath']
            dur = info_dict['dur']
            read_audio_sound_dict[info_dict_key] = {
                'dur': dur,
                'sound': sound.Sound(
                    value=fpath,
                    secs=dur,
                    stereo=True,
                    hamming=True,
                    name=info_dict_key,
                    volume=AUDIO_VOLUME
                )
            }
    CodeComponent code_setup
      Code Type = Py
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      Before Experiment:
        # enable (True) / disable (False) debug mode
        # make sure that this is set to **False** before
        # testing any participants
        DEBUG_ON = False

        ### BEGIN SET CONSTANTS ###
        # experiment constants/settings setup code snippet
        # size specifications, EXCEPT THOSE FOR IMAGES, are in degrees.
        # duration/time specifications are in seconds, unless otherwise
        # specified.

        # background color (used by experiment monitor settings)
        BG_COL = [1, 1, 1]

        # medium text size
        TXT_SIZE_M = 1

        # neutral text color
        TXT_COL_NEUTRAL = [-1, -1, -1]

        # regular text wrap width
        TXT_WRAP_WIDTH = 28

        # 'continue' and 'start' button y coordinate
        BTN_Y = -12

        # button text size
        BTN_TXT_HEIGHT = 1.2

        # 'continue' and 'start' button background/fill color
        BTN_FILL_COL = [0.5, 0.5, 0.5]
        # 'continue' and 'start' button border/line color
        BTN_BORDER_COL = [-1, -1, -1]
        # button text color
        BTN_TXT_COL = BTN_BORDER_COL
        # button width/height
        BTN_WIDTH = 4
        BTN_HEIGHT = 2
        # button text height
        BTN_TXT_HEIGHT = BTN_HEIGHT * 0.5

        # audio (read instructions/messages to participant) volume
        AUDIO_VOLUME = 1

        ## BEGIN INTRO SECTION ##
        # intro text y coordinate
        INTRO_TXT_Y = 3
        ## END INTRO SECTION ##

        ## BEGIN TRAIN/PRACTICE SECTION ##
        # training trials image borders color
        TRAIN_BORDER_COL = [0,0,0]
        #  training trials image borders active (clicks are welcome) color
        TRAIN_BORDER_ACTIVE_COL = [-0.5,-0.5,0.5]
        # training trial 1 instruction y coordinate
        TRAIN1_TXT_INST_Y = 7
        # training trial 1 target y coordinate #changed from 3 JN
        TRAIN1_TARGET_Y = 2
        # training trial 1 context y coordinate #changed from -3 JN
        TRAIN1_CONTEXT_Y = -4
        # training trial 1 target width/height IN PIXELS
        TRAIN1_TARGET_ORIG_WIDTH = 160
        TRAIN1_TARGET_ORIG_HEIGHT = 120
        # training trial 1 images resize factor
        TRAIN1_RESIZE_FACTOR = 1
        train1_target_width = TRAIN1_RESIZE_FACTOR * px_to_deg(TRAIN1_TARGET_ORIG_WIDTH)
        train1_target_height = TRAIN1_RESIZE_FACTOR * px_to_deg(TRAIN1_TARGET_ORIG_HEIGHT)
        # training trial 1 context width/height IN PIXELS
        TRAIN1_CONTEXT_ORIG_WIDTH = 430
        TRAIN1_CONTEXT_ORIG_HEIGHT = 270
        train1_context_width = TRAIN1_RESIZE_FACTOR * px_to_deg(TRAIN1_CONTEXT_ORIG_WIDTH)
        train1_context_height = TRAIN1_RESIZE_FACTOR * px_to_deg(TRAIN1_CONTEXT_ORIG_HEIGHT)
        # training trial 2 instruction y coordinate
        TRAIN2_TXT_INST_Y = 9.5
        # training trial 2 target y coordinate
        TRAIN2_TARGET_X = -4
        TRAIN2_TARGET_Y = -2.5
        # training trial 2 context x/y coordinates
        TRAIN2_CONTEXT_X = 4
        TRAIN2_CONTEXT_Y = -2.5
        # training trial 2 target width/height IN PIXELS
        TRAIN2_TARGET_ORIG_WIDTH = 119
        TRAIN2_TARGET_ORIG_HEIGHT = 133
        # training trial 2 images resize factor
        TRAIN2_RESIZE_FACTOR = 0.9
        train2_target_width = TRAIN2_RESIZE_FACTOR * px_to_deg(TRAIN2_TARGET_ORIG_WIDTH)
        train2_target_height = TRAIN2_RESIZE_FACTOR * px_to_deg(TRAIN2_TARGET_ORIG_HEIGHT)
        # training trial 2 context width/height IN PIXELS
        TRAIN2_CONTEXT_ORIG_WIDTH = 250
        TRAIN2_CONTEXT_ORIG_HEIGHT = 600
        train2_context_width = TRAIN2_RESIZE_FACTOR * px_to_deg(TRAIN2_CONTEXT_ORIG_WIDTH)
        train2_context_height = TRAIN2_RESIZE_FACTOR * px_to_deg(TRAIN2_CONTEXT_ORIG_HEIGHT)

        ## END TRAIN SECTION ##

        ## BEGIN PRE-POPOUT INSTRUCTION/TRAIN SECTION ##
        # pre-popout trials instruction text y coordinate
        PREPOPOUT_TXT_Y = 6

        # training pre-popout section images (marked/nonmarked)
        TRAIN3_SHOWPOPOUT_X = -8
        TRAIN3_SHOWPOPOUT_Y = -6
        TRAIN3_SHOWPOPOUT_ORIG_WIDTH = 250
        TRAIN3_SHOWPOPOUT_ORIG_HEIGHT = 600
        TRAIN3_RESIZE_FACTOR = 0.9
        train3_showpopout_width = TRAIN3_RESIZE_FACTOR * px_to_deg(TRAIN3_SHOWPOPOUT_ORIG_WIDTH)
        train3_showpopout_height = TRAIN3_RESIZE_FACTOR * px_to_deg(TRAIN3_SHOWPOPOUT_ORIG_HEIGHT)

        TRAIN4_SHOWPOPOUT_X = 0
        TRAIN4_SHOWPOPOUT_Y = -6
        TRAIN4_SHOWPOPOUT_ORIG_WIDTH = 500
        TRAIN4_SHOWPOPOUT_ORIG_HEIGHT = 350
        TRAIN4_RESIZE_FACTOR = 0.7
        train4_showpopout_width = TRAIN4_RESIZE_FACTOR * px_to_deg(TRAIN4_SHOWPOPOUT_ORIG_WIDTH)
        train4_showpopout_height = TRAIN4_RESIZE_FACTOR * px_to_deg(TRAIN4_SHOWPOPOUT_ORIG_HEIGHT)

        TRAIN5_SHOWPOPOUT_X = 8
        TRAIN5_SHOWPOPOUT_Y = -6
        TRAIN5_SHOWPOPOUT_ORIG_WIDTH = 500
        TRAIN5_SHOWPOPOUT_ORIG_HEIGHT = 350
        TRAIN5_RESIZE_FACTOR = 0.7
        train5_showpopout_width = TRAIN5_RESIZE_FACTOR * px_to_deg(TRAIN5_SHOWPOPOUT_ORIG_WIDTH)
        train5_showpopout_height = TRAIN5_RESIZE_FACTOR * px_to_deg(TRAIN5_SHOWPOPOUT_ORIG_HEIGHT)

        # duration of trial pre-popout instruction text
        INST_SHOWPOPOUT_TXT_DUR = 40
        # duration for which non-marked versions of example images
        # will be shown
        INST_SHOWPOPOUT_NONMARKED_DUR = 20
        # duration for which marked versions of example images
        # will be shown
        INST_SHOWPOPOUT_MARKED_DUR = 20


        ## END PRE-POPOUT INSTRUCTION/TRAIN SECTION ##

        ## BEGIN TRIAL SECTION ##
        # duration of pre-trial instruction message.
        # duration here is specified in
        # **number of frames** ie on a standard setup you will
        # specify 60 (frames) for 1s, since most computers
        # will show 60 frames/s
        TRIALINST_DUR = 3 * 60
        # letter height of pre-trial instruction message
        TRIALINST_TXT_HEIGHT = 3

        if not DEBUG_ON:
            # per-target maximum duration of multi-target (type 'once')
            # trials
            PER_TARGET_MAX_DUR = 30
            # maximum duration of single-target ('heap' and 'repeat' trials)
            SINGLE_TARGET_DUR = 90
            # maximum duration of single-target 'popout' (non-embedded)
            # trials
            SINGLE_TARGET_DUR_POPOUT = 30
        else:
            PER_TARGET_MAX_DUR = 5
            SINGLE_TARGET_DUR = 5
            SINGLE_TARGET_DUR_POPOUT = 5
        # duration of 'blocking period' after a new target is
        # presented, during which the participant cannot click
        BLOCKING_DUR = 0.4

        # trial target width/height IN PIXELS
        TRIAL_TARGET_ORIG_WIDTH = 210
        TRIAL_TARGET_ORIG_HEIGHT = 180
        # trial target resize factor
        TRIAL_TARGET_RESIZE_FACTOR = 1
        trial_target_width = TRIAL_TARGET_RESIZE_FACTOR * px_to_deg(TRIAL_TARGET_ORIG_WIDTH)
        trial_target_height = TRIAL_TARGET_RESIZE_FACTOR * px_to_deg(TRIAL_TARGET_ORIG_HEIGHT)
        # trial target y coordinate
        TRIAL_TARGET_Y = 11
        # trial context maximum width/height IN DEGREES
        # (each image here has a different size from the others)
        TRIAL_CONTEXT_MAX_WIDTH = 35
        TRIAL_CONTEXT_MAX_HEIGHT = 20
        # trial context y coordinate
        TRIAL_CONTEXT_Y = -3

        # for 'once' type trials, duration of inter-target-interval
        # (ie pause after each target being presented before next
        # target is shown/trial ends). duration here is specified in
        # **number of frames** ie on a standard setup you will
        # specify 60 (frames) for 1s, since most computers
        # will show 60 frames/s
        ONCE_INTER_TARGET_DUR = 60

        ## END TRIAL SECTION ##

        ### END SET CONSTANTS ###
  Routine trial
    CodeComponent code_trial
      Code Type = Py
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      Begin Routine:
        # store start time of trial
        trial_start_time = globalClock.getTime()

        # reset mouse click time clock, meaning that mouse click times
        # will be based on __time since trial onset__ (this mouse clock
        # is also used for saving target onset/offset times)
        mouse.mouseClock.reset(0)

        if trial_type == 'once':
            # reset 'once' type trial countdown timer (counting in frames) counting down
            # time until next target should be shown
            once_inter_target_counter = ONCE_INTER_TARGET_DUR
            # reset 'once' type trial target onset/offset times lists
            once_target_onset_times = [win.getFutureFlipTime(clock=mouse.mouseClock)]
            once_target_offset_times = []
      Each Frame:
        if not ready_continue:
            trial_context_img.draw()
            trial_target_img.draw()
            rect_trial_target.draw()
            rect_trial_context.draw()
            # draw crosses where participant has clicked
            for position in cross_position_list:
                cross_stimulus.pos = position
                cross_stimulus.draw()


        rectangle_continue.draw()
        text_continue.draw()

        # note that only data about trial clicks (clicks done before continue
        # button appears, and within context image are) are saved to output
        # csv file
        buttons = mouse.getPressed()
        if buttons != prevButtonState:  # button state changed?
            prevButtonState = buttons
            # state changed to a new click, and sufficient time has
            # passed since new target presentation
            if sum(buttons) > 0 and ((t - target_start_time) >= BLOCKING_DUR):
                x, y = mouse.getPos()
                cross_position_list.append((x, y))
                # if continue button is already shown and trial is otherwise
                # over
                if ready_continue:
                    if rectangle_continue.contains(mouse):
                        continueRoutine = False
                # if click within context image area
                elif trial_context_img.contains(mouse):
                    correct_click = False
                    click_counter += 1
                    # if this trial has multiple targets, each present at only
                    # one location in context image
                    if trial_type == 'once':
                        target_ellipsis = [ell for ell in trial_ellipses if ell.fname == target_filenames[ellipsis_counter]][0]
                        if target_ellipsis.contains(mouse):
                            correct_counter += 1
                            correct_click = True
                            mouse.clicked_name.append(target_ellipsis.fname)
                        # save current time __since trial start__ (hence, using the
                        # 'mouse clock') as target image offset time
                        once_target_offset_times.append(mouse.mouseClock.getTime())
                        next_img_time = True
                    else:
                        # list of indices of ellipses to be removed
                        rm_ell_inds = []
                        # go through all ellipses and check for each one if mouse
                        # was clicked within it
                        for ell_ind in range(len(nonclicked_ellipses)):
                            if nonclicked_ellipses[ell_ind].contains(mouse):
                                correct_counter += 1
                                correct_click = True
                                mouse.clicked_name.append(nonclicked_ellipses[ell_ind].fname)
                                rm_ell_inds.append(ell_ind)
                        # remove clicked ellipses
                        for rm_ell_ind in rm_ell_inds:
                            nonclicked_ellipses.pop(rm_ell_ind)
                            # decrement all 'remove indices' that are higher
                            # than the index whose element was just removed
                            rm_ell_inds = [x-1 if x>rm_ell_ind else x for x in rm_ell_inds]
                    if not correct_click:
                        mouse.clicked_name.append('outside_of_valid_targets')
                    buttons = mouse.getPressed()
                    mouse.time.append(mouse.mouseClock.getTime())
                    mouse.x.append(x)
                    mouse.y.append(y)

        if trial_type == 'once':
            # has the response time (minus the time where
            # the target is hidden) for this target image run out?
            if (t - target_start_time) >= time_limit and not next_img_time:
                # hide the target
                trial_target_img.opacity = 0
                once_inter_target_counter -= 1
            # has response time (including time where target is hidden)
            # for this target image run out?
            if once_inter_target_counter <= 0:
                # save current time __counting from trial onset__ (hence using the
                # 'mouse clock') as target image offset time
                once_target_offset_times.append(mouse.mouseClock.getTime())
                # reset 'once' type trial countdown timer
                once_inter_target_counter = ONCE_INTER_TARGET_DUR
                next_img_time = True
            if next_img_time:
                # make sure the target is displayed (in case it was
                # hidden due to trial time running out)
                trial_target_img.opacity = 1
                ellipsis_counter += 1
                if ellipsis_counter >= len(target_filenames):
                    # the trial is considered to be ended as soon as the
                    # continue button appears, hence the time here is
                    # stored as trial end time
                    trial_end_time = globalClock.getTime()
                    ready_continue = True
                    # show continue button
                    rectangle_continue.opacity = 1
                    text_continue.text = CONTINUE_TXT
                else:
                    # save next flip time __counting from trial onset__ (hence using the
                    # 'mouse clock') as target image onset time
                    once_target_onset_times.append(win.getFutureFlipTime(clock=mouse.mouseClock))
                    trial_target_img = target_img_dict[target_filenames[ellipsis_counter]]
                next_img_time = False
                target_start_time = t
        else:
            # has time run out, or all the target areas been clicked?
            if t >= time_limit or len(nonclicked_ellipses)==0:
                if not ready_continue:
                    # the trial is considered to be ended as soon as the
                    # continue button appears, hence the time here is
                    # stored as trial end time
                    trial_end_time = globalClock.getTime()
                    ready_continue = True
                    rectangle_continue.opacity = 1
                    text_continue.text = CONTINUE_TXT

        if DEBUG_ON:
            for ell in trial_ellipses:
                ell.draw()
      End Routine:
        trial_counter += 1

        # save trial data
        thisExp.addData('trial_type', trial_type)
        thisExp.addData('context_img_fname', context_filename)
        thisExp.addData('mouse.x', mouse.x)
        thisExp.addData('mouse.y', mouse.y)
        thisExp.addData('mouse.time', mouse.time)
        thisExp.addData('mouse.clicked_target', mouse.clicked_name)
        thisExp.addData('num_correct', correct_counter)
        thisExp.addData('num_clicks', click_counter)
        thisExp.addData('trial_start_time', trial_start_time)
        thisExp.addData('trial_end_time', trial_end_time)

        if trial_type == 'once':
            thisExp.addData('once_target_start_times', once_target_onset_times)
            thisExp.addData('once_target_end_times', once_target_offset_times)
    TextComponent text_trial_timekeeper
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine start
    TextComponent text_start
      color = $TXT_COL_NEUTRAL
      letterHeight = $TXT_SIZE_M
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $START_TXT_INST
      units = deg
      wrapWidth = $TXT_WRAP_WIDTH
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    MouseComponent mouse_start
      clickable = rectangle_continue
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = $read_audio_sound_dict['read_start']['dur']
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    CodeComponent code_start
      Code Type = Auto->JS
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      Begin Routine:
        text_continue.text = START_TXT_BTN

        # fetch audio of read instructions and its duration
        read_sound = read_audio_sound_dict['read_start']['sound']
        read_dur = read_audio_sound_dict['read_start']['dur']
        # start playing instructions
        read_sound.play()
      Each Frame:
        # if read instructions audio has finished playing
        if tThisFlip >= read_dur:
            rectangle_continue.draw()
            text_continue.draw()
      End Routine:
        text_continue.text = CONTINUE_TXT
  Routine end
    TextComponent text_end
      color = $TXT_COL_NEUTRAL
      letterHeight = $TXT_SIZE_M
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = $END_TXT
      units = deg
      wrapWidth = $TXT_WRAP_WIDTH
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    CodeComponent code_register_exprun
      Code Type = Auto->JS
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      End Experiment:
        # register that participant has run whole experiment successfully
        import csv
        testreg_dir_path = os.path.join('..', '..', 'exp_run_registration')
        if not os.path.isdir(testreg_dir_path):
            os.mkdir(testreg_dir_path)
        testreg_fpath = os.path.join(testreg_dir_path, f"{expInfo['participant']}_expreg.csv")
        add_header = not os.path.isfile(testreg_fpath)
        with open(testreg_fpath, 'a') as csvfile:
            testreg_writer = csv.writer(csvfile)
            if add_header:
                testreg_writer.writerow([f"{expInfo['participant']}_run_experiments"])
            testreg_writer.writerow([f"{expInfo['expName']}"])
  Routine trial_instruction
    TextComponent text_trialinstruction
      color = $TXT_COL_NEUTRAL
      letterHeight = $TRIALINST_TXT_HEIGHT
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = TRIALINST_DUR
      text [set every repeat] = $trialinstruction_mess
      units = deg
      wrapWidth = $TXT_WRAP_WIDTH
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    CodeComponent code_trialinstruction
      Code Type = Py
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      Before Experiment:
        def get_resize_factor(orig_w, orig_h, max_w, max_h):
            """
            Returns a resize factor based on former width/height and maximum
            allowed width/height.
            """
            if ((orig_h / max_h) > (orig_w / max_w)):
                return max_h/orig_h
            else:
                return max_w/orig_w
      Begin Experiment:
        # specify path to where context image sizes specification is located
        context_img_spec_path = os.path.join('stimuli', 'context_img_sizes.csv')

        context_img_df = pd.read_csv(context_img_spec_path)

        # form a dictionary of context images, where image filenames are the
        # keys
        context_img_dict = {}
        for i in range(len(context_img_df)):
            row = context_img_df.iloc[i]
            fname = row['filename']
            stim_name = fname.replace('.csv', '')
            orig_w_deg = px_to_deg(row['width_px'])
            orig_h_deg = px_to_deg(row['height_px'])
            context_resize_factor = get_resize_factor(
                orig_w_deg,
                orig_h_deg,
                TRIAL_CONTEXT_MAX_WIDTH,
                TRIAL_CONTEXT_MAX_HEIGHT
            )
            set_w_deg = orig_w_deg * context_resize_factor
            set_h_deg = orig_h_deg * context_resize_factor
            context_img_dict[fname] = {
                'stim': visual.ImageStim(
                    win=win,
                    name= f'image_{stim_name}_target',
                    image=os.path.join("stimuli", "trial", "context", fname),
                    mask=None,
                    ori=0,
                    pos=(0, TRIAL_CONTEXT_Y),
                    size=(set_w_deg, set_h_deg),
                    color=[1,1,1],
                    colorSpace='rgb',
                    opacity=1,
                    flipHoriz=False,
                    flipVert=False,
                    texRes=512,
                    interpolate=True,
                    depth=-2.0
                ),
                'resize_factor': context_resize_factor
            }

        # form dictionary of target images
        target_dir_path = os.path.join('stimuli', 'trial', 'target')
        target_fnames = [x for x in os.listdir(target_dir_path) if not x.startswith('.') and x.endswith('.jpg')]
        target_img_dict = {}
        for fname in target_fnames:
            stim_name = fname.replace('.csv', '')
            target_img_dict[fname]  = visual.ImageStim(
                win=win,
                name= f'image_{stim_name}_target',
                image=os.path.join(target_dir_path, fname),
                mask=None,
                ori=0,
                pos=(0, TRIAL_TARGET_Y),
                size=(trial_target_width, trial_target_height),
                color=[1,1,1],
                colorSpace='rgb',
                opacity=1,
                flipHoriz=False,
                flipVert=False,
                texRes=512,
                interpolate=True,
                depth=-2.0
            )

        # get trial stimuli/order specifications for this participant, based on group, and
        # put in a list of dictionaries
        group_no = expInfo['order_group_number']
        if not group_no.isnumeric() or int(float(group_no)) not in range(1, 5):
            err_mess = 'Invalid group number! Must be a single digit between 1-4. Please try again.'
            print(err_mess)
            raise IndexError(err_mess)
        group_no = int(float(group_no))
        spec_path = os.path.join('order_specifications', f'trial_stim_specifications_{group_no}.csv')
        trial_df = pd.read_csv(spec_path)
        trial_ls = []
        for i in range(len(trial_df)):
            row = trial_df.iloc[i]
            trial_dict = {
                'context_fname': row['context_filename'],
                'target_fnames': eval(row['target_filenames']),
                'type': row['type']
            }
            trial_ls.append(trial_dict)


        # border stimuli
        rect_trial_target = visual.Rect(
            win=win, name='rect_trial_target',units='deg',
            size=(trial_target_width, trial_target_height),
            ori=0, pos=(0, TRIAL_TARGET_Y),
            lineWidth=2, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=None, fillColorSpace='rgb',
            opacity=1, depth=-2.0, interpolate=True)

        rect_trial_context = visual.Rect(
            win=win, name='rect_trial_context',units='deg',
            size=(TRIAL_CONTEXT_MAX_WIDTH, TRIAL_CONTEXT_MAX_HEIGHT),
            ori=0, pos=(0, TRIAL_CONTEXT_Y),
            lineWidth=2, lineColor=[-1,-1,-1], lineColorSpace='rgb',
            fillColor=None, fillColorSpace='rgb',
            opacity=1, depth=-2.0, interpolate=True)

        # initialize trial counter
        trial_counter = 0

        # dictionary pairing trial types and which message to
        # show
        type_mess_dict = {
            'once': ONCE_TXT,
            'repeat': REP_TXT,
            'heap': REP_TXT
        }

        # initialize trial instruction message variable (to prevent undefined variable error)
        trial_type = trial_ls[trial_counter]['type']
        trialinstruction_mess = type_mess_dict[trial_type]
      Begin Routine:
        # reset mouse save data attributes
        mouse.x = []
        mouse.y = []
        mouse.time = []
        mouse.clicked_name = []

        # reset counters
        correct_counter = 0
        click_counter = 0
        ellipsis_counter = 0 # for multi-target trials, keeps track of which target is active

        # reset target start time keeper
        target_start_time = 0

        # reset variable indicating if routine is ready for showing
        # continue button
        ready_continue = False

        # reset variable indicating if it's time to switch to the next target
        # image (if this trial has multiple target types)
        next_img_time = False

        # reset continue button
        rectangle_continue.opacity = 0
        # empty continue text component's text, which is filled
        # in once participant is allowed to continue
        # (can't simply change opacity of thext text because of a PsychoPy bug)
        text_continue.text = ""

        # reset list of cross drawing positions
        cross_position_list.clear()

        # clear the list of ellipses stimuli, to make it ready for this trial
        trial_ellipses.clear()
        # specify the context x/y coordinate offsets
        context_y = TRIAL_CONTEXT_Y
        # extract the dictionary of trial information
        trial_dict = trial_ls[trial_counter]
        context_filename = trial_dict['context_fname']
        target_filenames = trial_dict['target_fnames']
        trial_type = trial_dict['type']

        # set the context and initial target images
        trial_context_img = context_img_dict[context_filename]['stim']
        trial_target_img =  target_img_dict[target_filenames[0]]
        # extract the resize factor for this routine
        resize_factor = context_img_dict[context_filename]['resize_factor']

        # set time limit (based on whether only one type of target is used, or
        # multiple types of targets are used)
        time_limit = SINGLE_TARGET_DUR if len(target_filenames)==1 else PER_TARGET_MAX_DUR

        # find which row indices in the ellipses_df that correspond to this trial's
        # target ellipses data
        df_indices = list(ellipses_df[ellipses_df['filename'] == context_filename].index)
        for index in df_indices:
            center_x = px_to_deg(ellipses_df.loc[index, 'center_x']) * resize_factor
            center_y = px_to_deg(ellipses_df.loc[index, 'center_y']) * resize_factor + context_y
            xaxis_r = px_to_deg(ellipses_df.loc[index, 'xaxis_r']) * resize_factor
            yaxis_r = px_to_deg(ellipses_df.loc[index, 'yaxis_r']) * resize_factor
            orientation = ellipses_df.loc[index, 'orientation']
            new_ellipsis = make_pp_ellipsis(
                center_x,
                center_y,
                xaxis_r,
                yaxis_r,
                orientation
            )
            new_ellipsis.fname = ellipses_df.loc[index, 'target_fname']
            trial_ellipses.append(new_ellipsis)

        # make a shallow copy of ellipses list, from which ellipses
        # will be plucked as soon as they are clicked
        nonclicked_ellipses = trial_ellipses[:]

        # set instruction message to display
        trialinstruction_mess = type_mess_dict[trial_type]
        text_trialinstruction.setText(trialinstruction_mess)
  Routine popout_instruction
    TextComponent text_popoutinst
      color = $TXT_COL_NEUTRAL
      letterHeight = TXT_SIZE_M
      pos = (0, PREPOPOUT_TXT_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $INST_SHOWPOPOUT_TXT_DUR
      text = $POPOUT_TXT
      units = deg
      wrapWidth = $TXT_WRAP_WIDTH
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    CodeComponent code_popoutinst
      Code Type = Auto->JS
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      Before Experiment:
        # note that this routine, for showing popout instructions
        # and changing trial/target durations,
        # is set to only be shown/run when 6 trials have passed,
        # since trials 7 and onwards are 'popout' trials. the condtional
        # logic for skipping this routine otherwise is implemented
        # using conditional logic for the 'nReps' parameter of the enclosing
        # loop, as suggested on the PsychoPy forums:
        # https://discourse.psychopy.org/t/implementing-conditional-routines/15193/2
      Begin Routine:
        # here, the value of a supposed 'constant' is actually changed.
        # this really shouldn't be done. however, the 'popout' trials were
        # requested to be added mid-study and little time was given for
        # accomplishing this task. hence, this piece of code is used
        # as a shortcut.
        SINGLE_TARGET_DUR = SINGLE_TARGET_DUR_POPOUT
    ImageComponent image_showpopout1_nonmarked
      image = stimuli/train/train3_showpopout_nonmarked.jpg
      pos = (TRAIN3_SHOWPOPOUT_X, TRAIN3_SHOWPOPOUT_Y)
      saveStartStop = False
      size = (train3_showpopout_width, train3_showpopout_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $INST_SHOWPOPOUT_NONMARKED_DUR
      texture resolution = 512
      units = deg
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    ImageComponent image_showpopout1_marked
      image = stimuli/train/train3_showpopout_marked.jpg
      pos = (TRAIN3_SHOWPOPOUT_X, TRAIN3_SHOWPOPOUT_Y)
      saveStartStop = False
      size = (train3_showpopout_width, train3_showpopout_height)
      startVal [time (s)] = $INST_SHOWPOPOUT_NONMARKED_DUR
      stopVal [duration (s)] = $INST_SHOWPOPOUT_MARKED_DUR
      texture resolution = 512
      units = deg
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    SoundComponent sound_popoutinst_readinst
      durationEstim = 20.135
      saveStartStop = False
      sound = $os.path.join(READ_AUDIO_DIR_PATH, READ_AUDIO_INTRO_FNAME)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $READ_AUDIO_INTRO_DUR
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    ImageComponent image_showpopout2_nonmarked
      image = stimuli/train/train4_showpopout_nonmarked.jpg
      pos = (TRAIN4_SHOWPOPOUT_X, TRAIN4_SHOWPOPOUT_Y)
      saveStartStop = False
      size = (train4_showpopout_width, train4_showpopout_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $INST_SHOWPOPOUT_NONMARKED_DUR
      texture resolution = 512
      units = deg
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    ImageComponent image_showpopout2_marked
      image = stimuli/train/train4_showpopout_marked.jpg
      pos = (TRAIN4_SHOWPOPOUT_X, TRAIN4_SHOWPOPOUT_Y)
      saveStartStop = False
      size = (train4_showpopout_width, train4_showpopout_height)
      startVal [time (s)] = $INST_SHOWPOPOUT_NONMARKED_DUR
      stopVal [duration (s)] = $INST_SHOWPOPOUT_MARKED_DUR
      texture resolution = 512
      units = deg
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    ImageComponent image_showpopout3_nonmarked
      image = stimuli/train/train5_showpopout_nonmarked.jpg
      pos = (TRAIN5_SHOWPOPOUT_X, TRAIN5_SHOWPOPOUT_Y)
      saveStartStop = False
      size = (train5_showpopout_width, train5_showpopout_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $INST_SHOWPOPOUT_NONMARKED_DUR
      texture resolution = 512
      units = deg
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    ImageComponent image_showpopout3_marked
      image = stimuli/train/train5_showpopout_marked.jpg
      pos = (TRAIN5_SHOWPOPOUT_X, TRAIN5_SHOWPOPOUT_Y)
      saveStartStop = False
      size = (train5_showpopout_width, train5_showpopout_height)
      startVal [time (s)] = $INST_SHOWPOPOUT_NONMARKED_DUR
      stopVal [duration (s)] = $INST_SHOWPOPOUT_MARKED_DUR
      texture resolution = 512
      units = deg
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Flow
  Routine setup
  Routine intro
  Routine train_1
  Routine train_2
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 11
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    Routine trial_instruction
    Routine trial
    LoopInitiator show_popout_inst loopType="TrialHandler"
      loopType = random
      nReps = int(trial_counter == 6)
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      Routine popout_instruction
    LoopTerminator show_popout_inst
  LoopTerminator trials
  Routine end
